PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': 's_001', 'trial': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 994]
  expName = reaction_time
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        duration   =  randint(3000,4000)/1000
  Routine instr
    TextComponent instructions
      color = [1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        This exp measures your reaction time

        Press any key after you see rectangle

        Any key to start
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr2
    TextComponent break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Same as previuos test. In addition timer will be displayed to help with reaction times.

        Press any button to continue
    KeyboardComponent key_resp_break
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every frame] = $timer_time
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        timer_time = 3.5
      Each Frame:
        timer_time = round(4.0-t,ndigits=1 )
  Routine the_end
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = The end
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    KeyboardComponent key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim1
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    KeyboardComponent key_resp1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine results
    ImageComponent imageimg_file
      image [set every repeat] = $img_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calc
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import matplotlib.pyplot as plt
      Begin Routine:
        thisExp.saveAsWideText(filename+'.csv', delim='auto')
        df = pd.read_csv(filename+'.csv')
        df = df[['key_resp1.rt']]
        df.columns = ['reakcijos_laikas']
        df['dalis'] = [1 if inx < len(df)/2 else 2 for inx in range(len(df))]
        df['eiles_nr'] = list(range(0, int(len(df)/2))) * 2
        df = df.dropna()
        df.to_csv(filename+'_RT.csv', index=False)
        fig, ax = plt.subplots()
        df.groupby('dalis').plot(x='eiles_nr', y="reakcijos_laikas", ax=ax)
        ax.legend(('Pirma dalis', 'Antra dalis'))
        plt.savefig(filename+'.png')
        img_file = filename+'.png'
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine trial
    Routine stim1
  LoopTerminator trials
  Routine instr2
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine trial2
    Routine stim1
  LoopTerminator trials_2
  Routine calc
  Routine results
  Routine the_end
